PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [960, 600]
  expName = AO_human_v_robot_pilot
  keyboardBackend = ioHub
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Routines
  Routine stimLoader
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    CodeComponent codeLoader
      Code Type = Auto->JS
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      Begin Experiment:
        condition_list = [];
        action_list = [];
        stim_dir_list=[];

        N_rep = 4
      Begin Routine:
        action_list.append(actions);
        condition_list.append(conditions);
        stim_dir_list.append(stimDir);
  Routine stimShuffler
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    CodeComponent codeShuffler
      Code Type = Auto->JS
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      Begin Experiment:
        #from numpy.random import choice
        #import csv
        #import datetime

        counterBlock = 0

        cbBlockList = [] # List of blocks in counterbalanced manner
        dictBlockList = [] # List of block dictionaries, each contains
        condBlockList = [] # LIST OF CONDITION FOR EACH BLOCK
      Begin Routine:
        def find_unique_func(arr):
            unique_elements = []
            for item in arr:
                if item not in unique_elements:
                    unique_elements.append(item)
            return unique_elements
        find_unique = find_unique_func

        unique_conditions = find_unique(condition_list) # list of unique conditions (n=4)

        N_condition = len(unique_conditions) # number of conditions: human and robot, left and right arm
        N_stim = int(len(action_list)/(N_rep*N_condition)) # number of action stimuli: 8
        N_block = N_rep * N_condition # number of blocks = 4x4 = 16
        N_blockStim = int(len(action_list) / N_block) # number of stimuli per block: 8

        # ASSIGN ITEMS INTO BLOCKS AND SHUFFLE THEM WITHIN EACH BLOCK (Errante et al 2020)
        block_list = []
        actionCond = []
        blockCond = []
        for cond in unique_conditions:
            actionCond = []
            for idx in range(len(condition_list)):
                if condition_list[idx] == cond:
                    actionCond.append(action_list[idx])
            checkConditions = False
            while not checkConditions:
                shuffle(actionCond)
                for i in range(len(actionCond) - 2):
                    if actionCond[i] == actionCond[i + 1] == actionCond[i + 2]:
                        break
                    else:
                        checkConditions = True

            blockCond = [actionCond[i:i+N_blockStim] for i in range(0, len(actionCond), N_blockStim)]
            block_list.append(blockCond)

        reshaped_list = []
        # Iterate through the original list and append inner lists to the reshaped list
        for outer_list in block_list:
            for inner_list in outer_list:
                reshaped_list.append(inner_list)
        block_list = reshaped_list # shape of (16,8) (16 blocks, 8 items per block)
        #print("#######", block_list[0])
        #print("row: ", len(block_list), ", column: ", len(block_list[0]))
        #print("####", block_list)


        # SHUFFLE BLOCKS' ORDER IN COUNTERBALANCED MANNER
        condIdxList = [] # create a list looking like [0, 0, 0, 0, 1, 1, 1, 1, 2, 2, 2, 2, 3, 3, 3, 3]
        for num in range(N_condition):
            for _ in range(N_rep):
                condIdxList.append(num)

        #indexed_list = list(enumerate(condIdxList))
        enumerated_list = []
        idx = 0
        for val in condIdxList:
            enumerated_list.append((idx, val))
            idx = idx + 1

        checkConditions = False
        shuffled_indexes = []
        shuffled_cond = []
        while not checkConditions:
            shuffle(enumerated_list)
        #    shuffled_indexes, shuffled_cond = zip(*enumerated_list)
            # unzip enumerated_list and extract columns
            for row in enumerated_list:
                shuffled_indexes.append(row[0])
                shuffled_cond.append(row[1])

            for i in range(len(shuffled_cond)-2):
                if shuffled_cond[i] == shuffled_cond[i + 1] == shuffled_cond[i + 2]:
                    break
                else:
                    checkConditions = True

        for i in shuffled_indexes:
            cbBlockList.append(block_list[i])
        #print('cbBlockList:', cbBlockList)
        #print(cbBlockList[0])
        #print(cbBlockList[0][1])


        # LIST OF BLOCK DICTIONARY
        # Each dictionary is a block with N_stim stimuli
        ctShuffledCounter = 0
        dictBlock = {}
        condList = []
        actionList = []
        dirList = []
        actionStr = ""
        for block in range(N_block):
            dictBlock = {}
            condList = []
            actionList = []
            dirList = []
            for idx in range(N_stim):
                actionStr = cbBlockList[block][idx]
                condList.append(actionStr[:-2])
                actionList.append(actionStr)
                dirList.append("./stimuli/" + actionStr + ".mp4")
            dictBlock['conditions'] = condList
            dictBlock['actions'] = actionList
            dictBlock['stimDir'] = dirList
            dictBlockList.append(dictBlock)

        #print('dictBlockList:', dictBlockList)
        #print(np.shape(dictBlockList))

        ## EXPORT DICTIONARY dictBlockList
        #current_datetime = datetime.datetime.now()
        #filepath = f"./output/dictBlockList_{current_datetime.strftime('%Y-%m-%d_%H-%M-%S')}.csv"
        #with open(filepath, 'w', newline='') as csvfile:
        #    writer = csv.DictWriter(csvfile, fieldnames = list(dictBlockList[0].keys()))
        #    writer.writeheader()
        #    for entry in dictBlockList:
        #        rows = zip(entry['conditions'],entry['actions'], entry['stimDir'])
        #        for row in rows:
        #            writer.writerow({'conditions':row[0], 'actions':row[1], 'stimDir':row[2]})

        # LIST OF CONDITION FOR EACH BLOCK
        for i in range(N_block):
            condBlockList.append(find_unique(dictBlockList[i]['conditions']))
        #print("Order of condition blocks: ", condBlockList)
  Routine welcomeScreen
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome

        Press Space to start the experiment
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine restPeriod
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    PolygonComponent crossRest
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    CodeComponent codeRest
      Code Type = Auto->JS
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      Begin Experiment:
        counterStim = 0
      End Routine:
        print(f"======= counterBlock {counterBlock} - condition: {condBlockList[counterBlock]} =======")


        counterStim = 0
        countDownN = 3
    KeyboardComponent skipRest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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  Routine beginBlock
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    TextComponent beginInstruction
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Observe the actions presented in the following videos.
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    TextComponent textCountDown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $countDownN
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    CodeComponent codeCountDown
      Code Type = Auto->JS
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      End Routine:
        countDownN = countDownN -1
  Routine stimVid
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    MovieComponent stimAction
      No audio = True
      backend = ffpyplayer
      durationEstim = 5.0
      forceEndRoutine = True
      movie [set every repeat] = $dictBlockList[counterBlock]['stimDir'][counterStim]
      size = (0.75, 0.42)
      startVal [time (s)] = 0.0
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    CodeComponent codeStim
      Code Type = Auto->JS
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      Begin Routine:
        print(f"counterStim {counterStim} - {dictBlockList[counterBlock]['stimDir'][counterStim]}")
  Routine endStim
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    CodeComponent codeEndStim
      Code Type = Auto->JS
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      Begin Routine:
        counterStim += 1
  Routine endFuncRun
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    CodeComponent codeEndRun
      Code Type = Py
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      Begin Routine:
        counterBlock += 1
  Routine endTrial
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    TextComponent textEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Thank you for your participation!

        Press Space to exit the experiment
    KeyboardComponent keyEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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Flow
  LoopInitiator loopLoader loopType="TrialHandler"
    conditionsFile = stimuli_table.xlsx
    isTrials = False
    loopType = sequential
    nReps = N_rep
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    conditions:
      [{'actors': 'human', 'sides': 'left', 'conditions': 'human_left', 'actions': 'human_left_0', 'actionNumbering': 'mov_0', 'mappedActions': 'air punching', 'stimDir': './stimuli/human/human_left_mov_0.mp4'},
      {'actors': 'human', 'sides': 'left', 'conditions': 'human_left', 'actions': 'human_left_1', 'actionNumbering': 'mov_1', 'mappedActions': 'backward-forward arm swing', 'stimDir': './stimuli/human/human_left_mov_1.mp4'},
      {'actors': 'human', 'sides': 'left', 'conditions': 'human_left', 'actions': 'human_left_2', 'actionNumbering': 'mov_2', 'mappedActions': 'lateral arm swing', 'stimDir': './stimuli/human/human_left_mov_2.mp4'},
      {'actors': 'human', 'sides': 'left', 'conditions': 'human_left', 'actions': 'human_left_3', 'actionNumbering': 'mov_3', 'mappedActions': 'reach forward', 'stimDir': './stimuli/human/human_left_mov_3.mp4'},
      {'actors': 'human', 'sides': 'left', 'conditions': 'human_left', 'actions': 'human_left_4', 'actionNumbering': 'mov_4', 'mappedActions': 'read to the side', 'stimDir': './stimuli/human/human_left_mov_4.mp4'},
      {'actors': 'human', 'sides': 'left', 'conditions': 'human_left', 'actions': 'human_left_5', 'actionNumbering': 'mov_5', 'mappedActions': 'touch face', 'stimDir': './stimuli/human/human_left_mov_5.mp4'},
      {'actors': 'human', 'sides': 'left', 'conditions': 'human_left', 'actions': 'human_left_6', 'actionNumbering': 'mov_6', 'mappedActions': 'touch head', 'stimDir': './stimuli/human/human_left_mov_6.mp4'}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
    Routine stimLoader
  LoopTerminator loopLoader
  Routine stimShuffler
  Routine welcomeScreen
  LoopInitiator loopFuncRun loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = N_block
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    Routine restPeriod
    LoopInitiator loopCountDown loopType="TrialHandler"
      loopType = sequential
      nReps = 4
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      Routine beginBlock
    LoopTerminator loopCountDown
    LoopInitiator loopBlock loopType="TrialHandler"
      loopType = random
      nReps = N_stim
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      Routine stimVid
      Routine endStim
    LoopTerminator loopBlock
    Routine endFuncRun
  LoopTerminator loopFuncRun
  Routine endTrial
